PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = soundd
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = 0.7412, 0.4431, 0.0588
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
    PolygonComponent polygon_3
      fillColor = -0.4353, -0.5216, 0.0902
      ori [set every repeat] = angle
      shape = rectangle
      size = (0.3, 0.2)
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the visual stimulus(0-999).Click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/HP/Desktop/angle.xlsx
    loopType = random
    nReps = 34
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    conditions:
      [{'delay': 0.1, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.4, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.7, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.1, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 120, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 120, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
